// "StartupMacros"
// The macros and macro tools in this file ("StartupMacros.txt") are 
// automatically installed in the Plugins>Macros submenu and
//  in the tool bar when ImageJ starts up.

//  About the drawing tools.
//
//  This is a set of drawing tools similar to the pencil, paintbrush, 
//  eraser and flood fill (paint bucket) tools in NIH Image. The 
//  pencil and paintbrush draw in the current foreground color 
//  and the eraser draws in the current background color. The
//  flood fill tool fills the selected area using the foreground color.
//  Hold down the alt key to have the pencil and paintbrush draw 
//  using the background color or to have the flood fill tool fill 
//  using the background color. Set the foreground and background 
//  colors by double-clicking on the flood fill tool or on the eye  
//  dropper tool.  Double-click on the pencil, paintbrush or eraser 
//  tool  to set the drawing width for that tool.
//
// Icons contributed by Tony Collins.

   // Global variables
   var pencilWidth=1,  eraserWidth=10, leftClick=16, alt=8;
   var brushWidth = 10; //call("ij.Prefs.get", "startup.brush", "10");
   var floodType =  "8-connected"; //call("ij.Prefs.get", "startup.flood", "8-connected");

   // The macro named "AutoRun" runs when ImageJ starts.
   // macro "AutoRun" {print("AutoRun");}

   // The macro named "AutoRunAndHide" runs when ImageJ starts
   // and the file containing it is not displayed when ImageJ opens it.
   // macro "AutoRunAndHide" {}

   //macro "AutoRun" {
      //run("My Plugin");
  //}

  //macro "Unused Tool -" {}

macro "Unused Tool-1 - " {}  // leave slot between text tool and magnifying glass unused


 //Toolset

macro "Display commands on image Action Tool-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 " {run("MySEM MainFrame");	}

var fCmds = newMenu("Image Filters Menu Tool", newArray("Brightness/Contrast","Window/Level","Regions of Interest","Select Image","Smooth","Sharpen","Enhance Contrast","Unsharp Mask","Remove Streaks","Correct Lines","Median Filter","Multi-Filters"));
	
macro "Image Filters Menu Tool - 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" {
      cmd = getArgument();
      if (cmd=="Brightness/Contrast")
           run("Brightness/Contrast...");
      else if (cmd=="Regions of Interest")
	   run("ROI Manager...");
      else if (cmd=="Select Image")
	   run("MySEM Select Image");
      else if (cmd=="Smooth")
	   run("Smooth");
      else if (cmd=="Sharpen")
	   run("Sharpen");
      else if (cmd=="Enhance Contrast")
	   run("Enhance Contrast");
      else if (cmd=="Unsharp Mask")
	   run("Unsharp Mask...");
      else if (cmd=="Window/Level")
	   run("Window/Level...");
      else if (cmd=="Remove Streaks")
	    run("Remove Streaks");
      else if (cmd=="Correct Lines")
	    run("MySEM Line Correction");
      else if (cmd=="Median Filter")
	    run("Median...");
      else if (cmd=="Multi-Filters")
	   run("MySEM Filters");
      else if (cmd!="-")
            run(cmd);
	}
macro "Set Scale and Calibrate Image [F2] Action Tool- CbooP51b1f5fbbf5f1b15510T5c10C " {
         run("MySEM Set Scale");
   }

macro "Profile Menu Tool - C037R12ccL85acL5c85L355c" {
	   run("Plot Profile");
	}

macro "Measure [F3] Action Tool- C037T0b11MT8b09eTcb09s" {
        run("MySEM Measure");
 }

macro "Statistics Action Tool- C037T0b11ST8b09tTcb09a" {
        run("Measure");
   }

var sCmds = newMenu("Format Menu Tool", newArray("Crop Image","Select Image","Add Scale Bar"));
  macro "Format Menu Tool - C037R12ccL1ada" {
      cmd = getArgument();
      if (cmd=="Crop Image")
           run("MySEM Crop");
      else if (cmd=="Select Image")
	   run("MySEM Select Image");
      else if (cmd=="Add Scale Bar")
	   run("Scale Bar...");
      else if (cmd!="-")
            run(cmd);
	}
 

//Macros

macro "Adjust Contrast/Brightness (Shift+Ctrl+C)" {
	run("Brightness/Contrast...");
	}

macro "MySEM: Display commands on image [F1]" {
         run("MySEM MainFrame");
   }

macro "MySEM: Set Scale and Calibrate [F2]" {
         run("MySEM Set Scale");
   }

macro "MySEM: Measure [F3]" {
        run("MySEM Measure");
 }

macro "MySEM: Image Multi-Filters [F4]" {
        run("MySEM Filters");
 }

macro "MySEM: Crop" {
        run("MySEM Crop");
  }

macro "MySEM: Select Image" {
        run("MySEM Select Image");
  }

macro "MySEM: Statistics" {
        run("Measure");
   }


macro "Add Scale Bar [F7]" {
	run("Set Scale...");
	run("Scale Bar...");}


macro "-" {} //menu divider


macro "Batch Convert Images  [F8]" {convertIMG();}

function convertIMG() {
               requires("1.33s");

               dir1 = getDirectory("Choose Source Directory ");
               Dialog.create("Convert sequence of images");
	       Dialog.addChoice("Outfile format: ", newArray("png", "jpg", "8-bit tiff","16-bit tiff", "gif", "bmp"));
               Dialog.addCheckbox(" Convert all ", true);
               Dialog.addString("OR Number of frames to convert?", "", 20);
               Dialog.addCheckbox(" Smooth ", false);
	       Dialog.addCheckbox(" Enhance contrast ", false);
               Dialog.addString("Value", "0.5", 5);
               Dialog.addCheckbox(" Normalize", false);
               Dialog.addCheckbox(" Save in the same folder ", true);
               Dialog.addCheckbox(" Log? ", false);
               Dialog.show();
		
		outformat=Dialog.getChoice();
               cvall=Dialog.getCheckbox();
               num=Dialog.getString();
               smooth=Dialog.getCheckbox();
	       enhcont=Dialog.getCheckbox();
               enhvalue=Dialog.getString();
               norm=Dialog.getCheckbox();
               dirtype = Dialog.getCheckbox();
               Log = Dialog.getCheckbox();

                       if(dirtype==true)
                               dir2 = dir1;
                       else
                               dir2 = getDirectory("Choose Destination Directory ");

		if(startsWith(outformat, "jpg"))
			{quality = call("ij.plugin.JpegWriter.getQuality");
    			 quality = getNumber("JPEG quality (0-100):", quality);
    			 run("Input/Output...", "jpeg="+quality);
			}

               list = getFileList(dir1);
               if(list.length<num || (cvall==true && num==""))
                       {length=list.length;}
               else
                       {length=num;}
               setBatchMode(true);
               for (i=0; i<length; i++) {
                       showProgress(i+1, length);

                       open(dir1+list[i]);
                       if (!endsWith(list[i], '.jpg') && !endsWith(list[i], '.tif') && !endsWith(list[i], '.bmp') && !endsWith(list[i], '.png') && !endsWith(list[i], '.JPG') && !endsWith(list[i], '.TIF') && !endsWith(list[i], '.BMP') && !endsWith(list[i], '.PNG') && !endsWith(list[i], '.dm3') && !endsWith(list[i], '.DM3'))
                               {if(Log==true)
                                       {print(list[i]+"   skipped, not jpg, tiff, bmp, png");}}

                       else {  
				if(smooth==true)
                                       {run("Smooth");}                               
				if(enhcont==true)
                                       {if(norm==true)
                                               run("Enhance Contrast", "saturated="+enhvalue+" normalize");
                                       else
                                               run("Enhance Contrast", "saturated="+enhvalue);}
                               if(Log==true)
                                       {print(list[i]+"    converted into:  "+outformat);}
                               }
                       saveAs(outformat, dir2+list[i]);
                       close();

               }


function convertTo8Bit() {
     if (bitDepth==24)
         {run("8-bit Color", "number=256");}
     else
         {run("8-bit");}
 }


macro "Batch Rescale images for Web  [F9]" {rescaleweb();}


function rescaleweb() {
               requires("1.33s");


               dir1 = getDirectory("Choose Source Directory ");
               Dialog.create("Rescale images for web ");
               Dialog.addCheckbox(" Rescale all ", true);
               Dialog.addString("OR Number of frames to rescale?", "", 20);
               Dialog.addString("Save as ", "jpg",5)
	       Dialog.addCheckbox(" Smooth ", false);
               Dialog.addCheckbox(" Enhance contrast ", false);
               Dialog.addString("Value contrast", "0.5", 5);
               Dialog.addString("Size long side (pixels)", "800", 5);
               Dialog.addCheckbox(" Interpolate ", false);
               Dialog.addCheckbox(" Save in the same folder ", false);
               Dialog.addCheckbox(" Log? ", true);
               Dialog.show();

               cvall=Dialog.getCheckbox();
               num=Dialog.getString();
               outformat=Dialog.getString();
               smooth=Dialog.getCheckbox();
               enhcont=Dialog.getCheckbox();
               enhvalue=Dialog.getString();
               scale=Dialog.getString();
               interpol=Dialog.getCheckbox();
               dirtype = Dialog.getCheckbox();
               Log = Dialog.getCheckbox();

               if(dirtype==true)
                       dir2 = dir1;
               else
                       dir2 = getDirectory("Choose Destination Directory ");

               list = getFileList(dir1);
               if(list.length<num || (cvall==true && num==""))
                       {length=list.length;}
               else
                       {length=num;}

               setBatchMode(true);
               for (i=0; i<length; i++)
                       {showProgress(i+1, length);

                       open(dir1+list[i]);
                       if (!endsWith(list[i], '.jpg') && !endsWith(list[i], '.tif') && !endsWith(list[i], '.bmp') && !endsWith(list[i], '.png') && !endsWith(list[i], '.JPG') && !endsWith(list[i], '.TIF') && !endsWith(list[i], '.BMP') && !endsWith(list[i], '.PNG') && !endsWith(list[i], '.dm3') && !endsWith(list[i], '.DM3'))
                               {if(Log==true)
                                       {print(list[i]+"   skipped, not jpg, tiff, bmp, png");}}

                       else {  if(smooth==true)
                                       {run("Smooth");}
				if(enhcont==true)
                                       {run("Enhance Contrast", "saturated="+enhvalue);}
                               a = getHeight();
                               b = getWidth();
                               if (a>b)
                                       {b1=b*scale/a;
                                       a1=scale;}
                               else
                                       {a1=a*scale/b;
                                       b1=scale;}

                               if(interpol==true)
                                               {run("Size...", "width="+b1 + " height="+a1 + " interpolate");}
                                       else
                                               {run("Size...", "width="+b1 + " height="+a1);}


                       saveAs(outformat, dir2+list[i]);
                       if(Log==true)
                               {print(list[i]+" : ("+a+"x"+b+")  -> ("+a1+"x"+b1+")");
                               print("           Saved in ."+outformat+"\n");}
                       }
                       close();


               }


macro "Open All Images as Stack  [F10]" {run("Image Sequence...", "sort use");}

macro "-" {} //menu divider

  macro "Save As JPEG... [j]" {
     quality = call("ij.plugin.JpegWriter.getQuality");
     quality = getNumber("JPEG quality (0-100):", quality);
     run("Input/Output...", "jpeg="+quality);
     saveAs("Jpeg");
  }


   macro "Save Inverted FITS" {
       run("Flip Vertically");
       run("FITS...", "");
       run("Flip Vertically");
  }

macro "Set Drawing Color..."{ 
      run("Color Picker..."); 
  }



macro "-" {} //menu divider
   macro "About Startup Macros..." {
       path = getDirectory("macros")+"/About Startup Macros";
       if (!File.exists(path))
           exit("\"About Startup Macros\" not found in ImageJ/macros/.");
       open(path);
   }
